<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialize Subjects</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialNum</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimNum</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialRandomization</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimIDMinFirstTrial" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimIDMaxFirstTrial" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Lower" Selector="Item1" />
                <Property Name="Upper" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateDiscreteUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>3</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StartStim</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimID</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MaxStimID</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MinStimID</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimNuminSequence" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimNumInTrial</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="13" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="8" To="18" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="10" To="17" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Update</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialNum</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StimNum</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="TrialRandomizationMin" />
              <Property Name="TrialRandomizationMax" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>RandomizeTrialTypeExceptFirst</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:CreateRandom">
                      <num:Seed xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Lower" DisplayName="TrialRandomizationMin" />
                    <Property Name="Upper" DisplayName="TrialRandomizationMax" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateDiscreteUniform">
                      <p1:Lower>0</p1:Lower>
                      <p1:Upper>2</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialRandomization</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialRandomization</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>MinStimID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>MaxStimID</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>MinStimID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>8</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>MaxStimID</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>9</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>MinStimID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>12</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>MaxStimID</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MinStimID</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MaxStimID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Lower" Selector="Item1" />
                <Property Name="Upper" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>RandomStimID</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:CreateRandom">
                      <num:Seed xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Lower" />
                    <Property Name="Upper" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateDiscreteUniform">
                      <p1:Lower>0</p1:Lower>
                      <p1:Upper>3</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartStim</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StimID</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimID</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>SetGrateParams</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>45</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>90</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name />
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>3</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>135</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:DegreeToRadian" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>3</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>4</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>2</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="11" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="14" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="12" Label="Source1" />
                  <Edge From="6" To="9" Label="Source3" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="13" Label="Source1" />
                  <Edge From="8" To="9" Label="Source4" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="16" Label="Source1" />
                  <Edge From="11" To="15" Label="Source1" />
                  <Edge From="12" To="15" Label="Source2" />
                  <Edge From="13" To="15" Label="Source3" />
                  <Edge From="14" To="15" Label="Source4" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CorrectGrate</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>SetCircleParams</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>5</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>-0.75</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>6</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>-0.3</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>7</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0.3</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name />
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>8</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0.75</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0.75</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0.3</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>-0.3</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>-0.75</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="10" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="11" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="12" Label="Source1" />
                  <Edge From="6" To="9" Label="Source3" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="13" Label="Source1" />
                  <Edge From="8" To="9" Label="Source4" />
                  <Edge From="9" To="15" Label="Source1" />
                  <Edge From="10" To="14" Label="Source1" />
                  <Edge From="11" To="14" Label="Source2" />
                  <Edge From="12" To="14" Label="Source3" />
                  <Edge From="13" To="14" Label="Source4" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IncorrectCircle</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>SetIncorrectGrateParams</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>9</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="IncorrectAngle1" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>20</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>10</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="IncorrectAngle2" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>100</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>11</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="IncorrectAngle3" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>40</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name />
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>12</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="IncorrectAngle4" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>170</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:DegreeToRadian" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="IncorrectSF1" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>4</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="IncorrectSF2" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>5</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="IncorrectSF3" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>6</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="IncorrectSF4" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>7</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="0" To="10" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="1" To="16" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="13" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="4" To="18" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="13" Label="Source2" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="7" To="20" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="13" Label="Source3" />
                  <Edge From="10" To="12" Label="Source1" />
                  <Edge From="10" To="22" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source4" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="24" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="23" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="23" Label="Source2" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="23" Label="Source3" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source4" />
                  <Edge From="23" To="24" Label="Source2" />
                  <Edge From="24" To="25" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IncorrectGrate</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimNum</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartStim</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MaxStimID</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MinStimID</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="LessThanOrEqual">
                    <Operand xsi:type="IntProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StimID</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="12" Label="Source1" />
            <Edge From="6" To="17" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="17" To="20" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="24" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="24" To="26" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="26" To="28" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="29" To="32" Label="Source1" />
            <Edge From="29" To="34" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="36" To="39" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source2" />
            <Edge From="39" To="42" Label="Source1" />
            <Edge From="39" To="46" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="40" To="47" Label="Source1" />
            <Edge From="41" To="42" Label="Source2" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="49" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source2" />
            <Edge From="46" To="48" Label="Source1" />
            <Edge From="47" To="48" Label="Source2" />
            <Edge From="48" To="49" Label="Source2" />
            <Edge From="49" To="50" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TrialLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialRandomization</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IncorrectCircle</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" Selector="Item1" />
                <Property Name="LocationY" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
              <Diameter>1</Diameter>
              <LocationX>-0.75</LocationX>
              <LocationY>0.75</LocationY>
              <Layer>0</Layer>
              <ColorR>0</ColorR>
              <ColorG>0.8</ColorG>
              <ColorB>1</ColorB>
              <ColorA>0.9</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CorrectGrate</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" Selector="Item1" />
                <Property Name="SpatialFrequency" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ExtentX>1.5</ExtentX>
              <ExtentY>1.5</ExtentY>
              <SpatialFrequency>1</SpatialFrequency>
              <TemporalFrequency>1</TemporalFrequency>
              <Phase>0</Phase>
              <Angle>0</Angle>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>1</Radius>
              <Aperture>0</Aperture>
              <Opacity>1</Opacity>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IncorrectGrate</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" Selector="Item1" />
                <Property Name="SpatialFrequency" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ExtentX>1.5</ExtentX>
              <ExtentY>1.5</ExtentY>
              <SpatialFrequency>7</SpatialFrequency>
              <TemporalFrequency>1</TemporalFrequency>
              <Phase>0</Phase>
              <Angle>170</Angle>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>1</Radius>
              <Aperture>0</Aperture>
              <Opacity>1</Opacity>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT1S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>StimNum</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Equal">
                      <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                        <Value>2</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:SkipUntil" />
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StimNum</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimNumInTrial</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:TakeWhile">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="LessThanOrEqual">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Response</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gli:KeyDown">
                      <gli:Key>Left</gli:Key>
                      <gli:Modifiers xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialNum</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="9" Label="Source1" />
            <Edge From="1" To="17" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="25" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="25" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="23" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source3" />
            <Edge From="25" To="27" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="29" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="33" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="41" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source2" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>