<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialize Subjects</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialNum</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimNum</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>First Trial Correct</Name>
              <Text><![CDATA[Initialize trial randomization to 1, so correct sequence runs]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialRandomization</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Set the position of the incorrect stimuli</Name>
              <Text><![CDATA[set the position (0, 1 or 2 for example) of where the incorrect stimuli appears in the sequence. This will only occur when trial randomization = 0]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SetAnIncorrectPosition</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WhichPositionStimuli</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Set the amount of incorrect stimuli on incorrect trials</Name>
              <Text><![CDATA[set the position (0, 1 or 2 for example) of where the incorrect stimuli appears in the sequence. This will only occur when trial randomization = 0]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SetAnAmountofIncorrectStim</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>HowManyIncorrectStimuli</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>amount of elements in sequence</Name>
              <Text><![CDATA[here you can set min and max stim ID, which set the randomization to start somehwere in the 4 element sequence (SetGrateParams), as well as control the logic of looping through the sequence (0-1-2-3-0, for example. This sets it for this for the first trial, and will stay like this unless randomized somewhere later.]]></Text>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimIDMinFirstTrial" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimIDMaxFirstTrial" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Lower" Selector="Item1" />
                <Property Name="Upper" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateDiscreteUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>3</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StartStim</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimID</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MaxStimID</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MinStimID</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Amount of Elements in Trial</Name>
              <Text><![CDATA[Here initialize how many elements should be in each trial]]></Text>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimNuminSequence" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimNumInTrial</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="15" To="23" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="16" To="19" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="18" To="28" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="20" To="27" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="24" To="26" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Update</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialNum</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Probability Trial Type</Name>
              <Text><![CDATA[Set the boundaries for randomizing between trial type. for now is 1 and 0. Will have to adjust for 10-20% trials, for 0-9, double check the greater than/less than instead of equal to for all trial randomization logic]]></Text>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="TrialRandomizationMin" />
              <Property Name="TrialRandomizationMax" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>RandomizeTrialTypeExceptFirst</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>Wait this many trials</Name>
                    <Text><![CDATA[set here how many trials should be correct before randomization of trial type (correct or incorrect) starts
0 = 1 trial]]></Text>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:CreateRandom">
                      <num:Seed xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Lower" DisplayName="TrialRandomizationMin" />
                    <Property Name="Upper" DisplayName="TrialRandomizationMax" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateDiscreteUniform">
                      <p1:Lower>0</p1:Lower>
                      <p1:Upper>1</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialRandomization</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialRandomization</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>To make a separate loop for Incorrect</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>MinStimID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>MaxStimID</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="LessThan">
                <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                  <Value>1</Value>
                </Operand>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Value" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Value" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="BooleanProperty">
                        <Value>true</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="2" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Annotation">
                <Name>Fixed values from initialize</Name>
                <Text><![CDATA[]]></Text>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>SetAnIncorrectPosition</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Value" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Annotation">
                <Name>can make random later</Name>
                <Text><![CDATA[need to adjust this to incorporate a randomization of which position the incorrect stim shows up in]]></Text>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>2</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>WhichPositionStimuli</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>SetAnAmountofIncorrectStim</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Value" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>2</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>HowManyIncorrectStimuli</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StimNum</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MinStimID</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MaxStimID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Lower" Selector="Item1" />
                <Property Name="Upper" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>needs to be triggered by zip</Name>
              <Text><![CDATA[tried to trigger from trial randomization before, this creates an issue if the position of the incorrect should be at the first element. Racing triggers? ]]></Text>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>RandomStimID</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:CreateRandom">
                      <num:Seed xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Lower" />
                    <Property Name="Upper" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateDiscreteUniform">
                      <p1:Lower>0</p1:Lower>
                      <p1:Upper>3</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartStim</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StimID</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimID</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>SetGrateParams</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>45</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>90</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name />
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>3</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>135</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:DegreeToRadian" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="11" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="12" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="13" Label="Source1" />
                  <Edge From="6" To="9" Label="Source3" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="14" Label="Source1" />
                  <Edge From="8" To="9" Label="Source4" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="16" Label="Source1" />
                  <Edge From="11" To="15" Label="Source1" />
                  <Edge From="12" To="15" Label="Source2" />
                  <Edge From="13" To="15" Label="Source3" />
                  <Edge From="14" To="15" Label="Source4" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CorrectGrate</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>SetIncorrectGrateParams</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>20</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>30</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>21</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>60</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>22</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>40</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name />
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>23</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>80</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:DegreeToRadian" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>6</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>6</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="11" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="12" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="13" Label="Source1" />
                  <Edge From="6" To="9" Label="Source3" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="14" Label="Source1" />
                  <Edge From="8" To="9" Label="Source4" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="16" Label="Source1" />
                  <Edge From="11" To="15" Label="Source1" />
                  <Edge From="12" To="15" Label="Source2" />
                  <Edge From="13" To="15" Label="Source3" />
                  <Edge From="14" To="15" Label="Source4" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CorrectGrate</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>UpdateStimID</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimNum</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StartStim</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>add stim num</Name>
                    <Text><![CDATA[adds the stim num (0,1,2,3) to the start stim, to create a stim ID for each presented stimulus]]></Text>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>loops through sequence</Name>
                    <Text><![CDATA[whatever the min and max stim ID are, these make sure the sequence is updated to the following element in the sequence, and loops back after it is over. 
for now 0-1-2-3-0

for blue circle code also stim sequence 5-6-7-8-5 was used, with min and max stim ID set based on trial randomization. 

if you integrate another min max id, leave 1 number gap in between, otherwise logic gets complex with overlapping number]]></Text>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MaxStimID</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                            <Value>3</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Subtract">
                    <Operand xsi:type="IntProperty">
                      <Value>4</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MinStimID</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="GreaterThanOrEqual">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="LessThanOrEqual">
                          <Operand xsi:type="IntProperty">
                            <Value>3</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialRandomization</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialRandomization</Name>
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>if trial is incorrect</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HowManyIncorrectStimuli</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>for 2 incorrect stimuli</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WhichPositionStimuli</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="NotEqual">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>20</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>for 1 incorrect stimuli</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>20</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="NotEqual">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StimID</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="0" To="32" Label="Source2" />
                  <Edge From="0" To="36" Label="Source1" />
                  <Edge From="0" To="43" Label="Source2" />
                  <Edge From="0" To="47" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source2" />
                  <Edge From="3" To="4" Label="Source3" />
                  <Edge From="4" To="8" Label="Source1" />
                  <Edge From="4" To="12" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="10" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="13" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="15" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="14" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="19" Label="Source1" />
                  <Edge From="15" To="24" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="50" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="24" Label="Source2" />
                  <Edge From="23" To="24" Label="Source3" />
                  <Edge From="24" To="29" Label="Source1" />
                  <Edge From="24" To="42" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="25" To="39" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="29" Label="Source2" />
                  <Edge From="28" To="29" Label="Source3" />
                  <Edge From="29" To="34" Label="Source1" />
                  <Edge From="29" To="38" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="31" To="36" Label="Source2" />
                  <Edge From="31" To="43" Label="Source1" />
                  <Edge From="31" To="47" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source2" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="50" Label="Source2" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source2" />
                  <Edge From="38" To="50" Label="Source3" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="42" Label="Source2" />
                  <Edge From="41" To="42" Label="Source3" />
                  <Edge From="42" To="45" Label="Source1" />
                  <Edge From="42" To="49" Label="Source1" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="44" To="45" Label="Source2" />
                  <Edge From="45" To="46" Label="Source1" />
                  <Edge From="46" To="50" Label="Source4" />
                  <Edge From="47" To="48" Label="Source1" />
                  <Edge From="48" To="49" Label="Source2" />
                  <Edge From="49" To="50" Label="Source5" />
                  <Edge From="50" To="51" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="5" To="11" Label="Source1" />
            <Edge From="5" To="13" Label="Source1" />
            <Edge From="5" To="24" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="6" To="9" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="18" Label="Source1" />
            <Edge From="13" To="22" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="14" To="20" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="18" Label="Source2" />
            <Edge From="17" To="18" Label="Source3" />
            <Edge From="17" To="22" Label="Source3" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="28" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="28" To="31" Label="Source2" />
            <Edge From="29" To="31" Label="Source1" />
            <Edge From="30" To="31" Label="Source3" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="31" To="33" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="34" To="37" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TrialLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CorrectGrate</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" Selector="Item1" />
                <Property Name="SpatialFrequency" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ExtentX>1.5</ExtentX>
              <ExtentY>1.5</ExtentY>
              <SpatialFrequency>6</SpatialFrequency>
              <TemporalFrequency>1</TemporalFrequency>
              <Phase>0</Phase>
              <Angle>80</Angle>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>1</Radius>
              <Aperture>0</Aperture>
              <Opacity>1</Opacity>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT1S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>UpdateStimNum</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StimNum</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimNumInTrial</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:TakeWhile">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="LessThanOrEqual">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Response</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gli:KeyDown">
                      <gli:Key>Left</gli:Key>
                      <gli:Modifiers xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>UpdateTrialNum</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialNum</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>