WorkflowBuilder(Version=2.8.5)
Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  VSync=On
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
-> PublishSubject Draw

GroupWorkflow "Initialize Subjects"
    Int64Property(Value=0)
    -> BehaviorSubject TrialNum

    Int64Property(Value=0)
    -> BehaviorSubject StimNum

    Annotation "First Trial Correct"(Text="Initialize trial randomization to 1, so correct sequence runs")
    -> Int64Property(Value=0)
    -> BehaviorSubject TrialRandomization

    Annotation "Set the position of the incorrect stimuli"
      Text="set the position (0, 1 or 2 for example) of where the incorrect stimuli appears in the sequence. This will only occur when trial randomization = 0"
    -> Int64Property(Value=2)
    -> BehaviorSubject SetAnIncorrectPosition

    Bonsai.Numerics.CreateRandom(Seed=nil) => #10
    Annotation "amount of elements in sequence" => #11
      Text: here you can set min and max stim ID, which set the randomization to start somehwere in the 4 element sequence (SetGrateParams), as well as control the logic of looping through the sequence (0-1-2-3-0, for example. This sets it for this for the first trial, and will stay like this unless randomized somewhere later.
    -> ExternalizedMapping(Value(DisplayName=StimIDMinFirstTrial))
    -> Int64Property(Value=0) => #13
    #11 -> ExternalizedMapping(Value(DisplayName=StimIDMaxFirstTrial))
    -> Int64Property(Value=3) => #15
    #13, #15 -> Zip
    -> PropertyMapping(Lower(Selector=Item1), Upper(Selector=Item2)) => #17
    #10, #17 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=3) => #18
    Source2=#18 -> Bonsai.Numerics.Distributions.Sample => #19
    -> BehaviorSubject StartStim
    #19 -> BehaviorSubject StimID
    #15 -> BehaviorSubject MaxStimID
    #13 -> BehaviorSubject MinStimID

    Annotation "Amount of Elements in Trial"(Text="Here initialize how many elements should be in each trial")
    -> ExternalizedMapping(Value(DisplayName=StimNuminSequence))
    -> Int64Property(Value=3)
    -> Subtract(Operand=WorkflowProperty<System.Int64>(Value=1))
    -> BehaviorSubject StimNumInTrial

GroupWorkflow Update
    SubscribeSubject TrialNum => #0
    Annotation "Probability Trial Type"
      Text: Set the boundaries for randomizing between trial type. for now is 1 and 0. Will have to adjust for 10-20% trials, for 0-9, double check the greater than/less than instead of equal to for all trial randomization logic
    -> ExternalizedMapping(TrialRandomizationMin, TrialRandomizationMax) => #2
    #0, #2 -> SelectMany RandomizeTrialTypeExceptFirst
        WorkflowInput Source1 => #0
        Annotation "Wait this many trials" => #1
          Text:
            set here how many trials should be correct before randomization of trial type (correct or incorrect) starts
            0 = 1 trial
        #0, #1 -> Condition
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Numerics.CreateRandom(Seed=nil) => #3
        ExternalizedMapping(Lower(DisplayName=TrialRandomizationMin), Upper(DisplayName=TrialRandomizationMax)) => #4
        #3, #4 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample => #6
        Annotation "makes less repetitive? "(Text="need to check how to stop repetitions over 2/3?") => #7
        #6, #7 -> Disable Bonsai.Numerics.Permutation
        -> WorkflowOutput
    -> MulticastSubject TrialRandomization
    -> Disable ElementIndex => #5
    Annotation "add counting repetitive values"(Text="need to check how to stop repetitions over 2/3?") => #6
    #5, #6 -> Disable MemberSelector(Selector=Value)

    Int64Property(Value=0)
    -> Int64Property(Value=0)

    SubscribeSubject TrialRandomization => #10
    Annotation "this needs to be reset every trial for Random Stim ID"(Text="") => #11
    #10, #11 -> FloatProperty(Value=0)
    -> MulticastSubject MinStimID
    #10, #11 -> FloatProperty(Value=3)
    -> MulticastSubject MaxStimID
    ExternalizedMapping(Value(DisplayName="Value of Trial Randomization = Incorrect")) => #16
    #10, #16 -> GreaterThan(Operand=WorkflowProperty<System.Int64>(Value=0))
    -> PropertyMapping(Value) => #18
    #10, #18 -> Condition => #19
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    Annotation "Fixed position from initialize"(Text="")
    -> SubscribeSubject SetAnIncorrectPosition
    -> PropertyMapping(Value) => #22
    Annotation "can make random later"(Text="need to adjust this to incorporate a randomization of which position the incorrect stim shows up in") => #23
    #19, #22, #23 -> FloatProperty(Value=2)
    -> BehaviorSubject WhichPositionStimuli
    #10 -> FloatProperty(Value=0)
    -> MulticastSubject StimNum
    #10 -> Condition
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> FloatProperty(Value=2)
    -> BehaviorSubject HowManyIncorrectStimuli

    SubscribeSubject MinStimID => #31
    SubscribeSubject MaxStimID => #32
    #31, #32 -> Zip => #33
    -> PropertyMapping(Lower(Selector=Item1), Upper(Selector=Item2)) => #34
    Annotation "don't touch this"(Text="needs to be triggered from zip... tried everything else didn't work") => #35
    #34, #33, #35 -> SelectMany RandomStimID => #36
        WorkflowInput Source1
        -> Bonsai.Numerics.CreateRandom(Seed=nil) => #1
        ExternalizedMapping(Lower, Upper) => #2
        #1, #2 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=3) => #3
        Source2=#3 -> Bonsai.Numerics.Distributions.Sample
        -> WorkflowOutput
    -> MulticastSubject StartStim
    Annotation "Don't need this anymore"(Text="Now I add only StimNum (0,1,2 for 3 element sequence) to the StartStim, so I shouldn't have to reset the StimID at end of trial ") => #38
    #36, #38 -> MulticastSubject StimID

    SubscribeSubject StimID => #40
    -> SelectMany SetGrateParams
        WorkflowInput Source1 => #0
        -> Condition => #1
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #2
        #0 -> Condition => #3
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> FloatProperty(Value=45) => #4
        #0 -> Condition => #5
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> FloatProperty(Value=90) => #6
        #0 -> Condition => #7
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> FloatProperty(Value=135) => #8
        #2, #4, #6, #8 -> Merge
        -> Bonsai.Numerics.DegreeToRadian => #10
        #1 -> FloatProperty(Value=1) => #11
        #3 -> FloatProperty(Value=1) => #12
        #5 -> FloatProperty(Value=1) => #13
        #7 -> FloatProperty(Value=1) => #14
        #11, #12, #13, #14 -> Merge => #15
        #10, #15 -> Zip
        -> WorkflowOutput
    -> BehaviorSubject CorrectGrate
    #40 -> SelectMany SetIncorrectGrateParams
        WorkflowInput Source1 => #0
        -> Condition => #1
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=20))
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #2
        #0 -> Condition => #3
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=21))
            -> WorkflowOutput
        -> FloatProperty(Value=45) => #4
        #0 -> Condition => #5
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=22))
            -> WorkflowOutput
        -> FloatProperty(Value=90) => #6
        #0 -> Condition => #7
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=23))
            -> WorkflowOutput
        -> FloatProperty(Value=135) => #8
        #2, #4, #6, #8 -> Merge
        -> Bonsai.Numerics.DegreeToRadian => #10
        #1 -> FloatProperty(Value=4) => #11
        #3 -> FloatProperty(Value=4) => #12
        #5 -> FloatProperty(Value=4) => #13
        #7 -> FloatProperty(Value=4) => #14
        #11, #12, #13, #14 -> Merge => #15
        #10, #15 -> Zip
        -> WorkflowOutput
    -> MulticastSubject CorrectGrate

    GroupWorkflow Sequence
        SubscribeSubject StimNum => #0
        Annotation "stops StimID update after last element presentation"(Text="this prevents the stimcounter from running the StimID to update after the last element in the sequence is presented.")
        -> SubscribeSubject StimNumInTrial
        -> PropertyMapping(Value) => #3
        #0, #3 -> LessThanOrEqual(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> PropertyMapping(Value) => #5
        #5, #0 -> Condition => #6
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject StartStim
        -> PropertyMapping(Value) => #8
        Annotation "add stim num"(Text="adds the stim num (0,1,2,3) to the start stim, to create a stim ID for each presented stimulus") => #9
        #6, #8, #9 -> Add(Operand=IntProperty(Value=3)) => #10
        Annotation "loops through sequence" => #11
          Text:
            whatever the min and max stim ID are, these make sure the sequence is updated to the following element in the sequence, and loops back after it is over.
            for now 0-1-2-3-0

            for blue circle code also stim sequence 5-6-7-8-5 was used, with min and max stim ID set based on trial randomization.

            if you integrate another min max id, leave 1 number gap in between, otherwise logic gets complex with overlapping number
        -> SubscribeSubject MaxStimID => #12
        -> PropertyMapping(Value) => #13
        #10, #13 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> GreaterThan(Operand=WorkflowProperty<System.Int64>(Value=3))
            -> WorkflowOutput
        -> Subtract(Operand=IntProperty(Value=4)) => #15
        #11 -> SubscribeSubject MinStimID
        -> PropertyMapping(Value) => #17
        #10, #17 -> Condition => #18
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=WorkflowProperty<System.Int64>(Value=0))
            -> WorkflowOutput
        #12 -> PropertyMapping(Value) => #19
        #18, #19 -> Condition => #20
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> LessThanOrEqual(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        #15, #20 -> Merge => #21
        SubscribeSubject TrialRandomization => #22
        -> LessThan(Operand=WorkflowProperty<System.Int64>(Value=1))
        -> PropertyMapping(Value) => #24
        #21, #24 -> Condition => #25
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> WorkflowOutput
        #22 -> Equal(Operand=WorkflowProperty<System.Int64>(Value=1))
        -> PropertyMapping(Value) => #27
        #27, #21 -> Condition => #28
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> WorkflowOutput
        SubscribeSubject WhichPositionStimuli => #29
        -> PropertyMapping(Value) => #30
        #6, #30 -> NotEqual(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> PropertyMapping(Value) => #32
        #28, #32 -> Condition => #33
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        #29 -> PropertyMapping(Value) => #34
        #6, #34 -> Equal(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> PropertyMapping(Value) => #36
        #28, #36 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> WorkflowOutput
        -> Add(Operand=IntProperty(Value=20)) => #38
        #22 -> Equal(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> PropertyMapping(Value) => #40
        #40, #21 -> Condition => #41
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> WorkflowOutput
        #29 -> PropertyMapping(Value) => #42
        #42, #6 -> Equal(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> PropertyMapping(Value) => #44
        #41, #44 -> Condition => #45
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> WorkflowOutput
        #29 -> PropertyMapping(Value) => #46
        #46, #6 -> NotEqual(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> PropertyMapping(Value) => #48
        #41, #48 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> Add(Operand=IntProperty(Value=20)) => #50
        #22 -> Equal(Operand=WorkflowProperty<System.Int64>(Value=3))
        -> PropertyMapping(Value) => #52
        #21, #52 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> Add(Operand=IntProperty(Value=20)) => #54
        #25, #33, #38, #45, #50, #54 -> Merge
        -> MulticastSubject StimID
        -> WorkflowOutput

GroupWorkflow TrialLogic
    SubscribeSubject Draw => #0
    SubscribeSubject CorrectGrate
    -> PropertyMapping(Angle(Selector=Item1), SpatialFrequency(Selector=Item2)) => #2
    #0, #2 -> IncludeWorkflow => #3
      Path=BonVision:Primitives.DrawGratings.bonsai
      LocationX=0
      LocationY=0
      Layer=0
      ExtentX=1.5
      ExtentY=1.5
      SpatialFrequency=4
      TemporalFrequency=1
      Phase=0
      Angle=0
      SquareWave=false
      Contrast=1
      DutyCycle=nil
      Radius=1
      Aperture=0
      Opacity=1
    Bonsai.Shaders.Timer(DueTime=PT1S) => #4
    #3, #4 -> SubscribeWhen => #5
    Bonsai.Shaders.Timer(DueTime=PT2S) => #6
    #5, #6 -> TakeUntil
    -> Last
    -> Repeat
    -> ElementIndex
    -> SelectMany UpdateStimNum => #11
        WorkflowInput Source1
        -> MemberSelector(Selector=Index)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject StimNum
        -> WorkflowOutput
    SubscribeSubject StimNumInTrial => #12
    -> PropertyMapping(Value) => #13
    #11, #13 -> TakeWhile
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> LessThanOrEqual(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> Last
    -> SelectMany Response => #16
        Disable WorkflowInput Source1 => #0
        Disable SubscribeSubject Response
        -> Disable BooleanProperty(Value=true) => #2
        SubscribeSubject Response
        -> BooleanProperty(Value=true) => #4
        Timer(DueTime=PT2S, Period=PT0S)
        -> BooleanProperty(Value=false) => #6
        #4, #6 -> Merge
        -> Take(Count=1) => #8
        #2, #8 -> Disable First => #9
        #0, #9, #8 -> Disable Zip
        -> WorkflowOutput
    -> Condition Success
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany Reward => #18
        Timer(DueTime=PT0.1S, Period=PT0.1S)
        -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> Equal(Operand=WorkflowProperty<System.Int64>(Value=0))
        -> MulticastSubject Speaker
        -> Take(Count=6)
        -> Last
        -> WorkflowOutput
    #16 -> Condition Miss
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany Fail => #20
        Timer(DueTime=PT0.1S, Period=PT0.1S)
        -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> Equal(Operand=WorkflowProperty<System.Int64>(Value=0))
        -> MulticastSubject Speaker
        -> Take(Count=2)
        -> Last
        -> Delay(DueTime=PT3S)
        -> WorkflowOutput
    #18, #20 -> Merge
    -> Repeat
    -> ElementIndex
    -> SelectMany UpdateTrialNum
        WorkflowInput Source1
        -> MemberSelector(Selector=Index)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TrialNum
        -> WorkflowOutput
    SubscribeSubject StimNum => #25
    #12 -> PropertyMapping(Value) => #26
    #25, #26 -> LessThanOrEqual(Operand=WorkflowProperty<System.Int64>(Value=2))
    -> PropertyMapping(Value) => #28
    #28, #25 -> Condition => #29
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    Annotation "Actual Stim Num" => #30
      Text: This adjusts so that the counter that presents elements (which counts one more than the elements presented) only gives the stim num per element, excluding the last stim counter at end of sequence.
    #29, #30 -> BehaviorSubject WriteStimNum

GroupWorkflow "Log Data"
    SubscribeSubject WriteStimNum => #0
    SubscribeSubject StimID => #1
    #0, #1 -> Zip => #2
    SubscribeSubject TrialNum
    -> Timestamp => #4
    SubscribeSubject TrialRandomization => #5
    #4, #5 -> Zip => #6
    #2, #6 -> WithLatestFrom
    -> Disable Skip(Count=1)
    -> MemberSelector(Selector="Item1,Item2")
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
      Expression:
        new(
        it.Item1.Item1 as StimulusNumber,
        it.Item1.Item2 as StimulusElement,
        it.Item2.Item1 as TrialNum,
        it.Item2.Item2 as TrialType)
    Annotation "check alignment stim Num and stim element"(Text="") => #11
    #10, #11 -> Bonsai.IO.CsvWriter(FileName=metaData.csv, Delimiter=;, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)

Bonsai.Arduino.DigitalInput(PortName=COM3, Pin=2)
-> PublishSubject Response
-> Timestamp
-> Bonsai.IO.CsvWriter(FileName=results.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)

BehaviorSubject<System.Boolean> Speaker
-> Bonsai.Arduino.DigitalOutput(PortName=COM3, Pin=11)
