WorkflowBuilder(Version=2.8.1)
Bonsai.Shaders.CreateWindow
  Width=3240
  Height=1920
  VSync=On
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Hidden
  WindowState=Normal
  DisplayDevice=Third
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.IO.Ports.CreateSerialPort
  Name=Task
  PortName=COM4
  BaudRate=115200
  NewLine=\r\n
  Parity=None
  ParityReplace=63
  DataBits=8
  StopBits=One
  Handshake=None
  DiscardNull=false
  DtrEnable=true
  RtsEnable=false
  ReadBufferSize=4096
  WriteBufferSize=2048
  ReceivedBytesThreshold=1

GroupWorkflow DAQ
    ExternalizedMapping(SampleRate, Channels)
    -> Bonsai.DAQmx.AnalogInput
      SignalSource=""
      SampleRate=1000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      SamplesPerChannel=nil
      Channels
        AnalogInputChannelConfiguration(ChannelName=StartFramePV, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai4, TerminalConfiguration=Nrse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName="Solenoid(8)", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai8, TerminalConfiguration=Nrse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName="Solenoid(9)", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai9, TerminalConfiguration=Nrse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName="Cap(10)", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai10, TerminalConfiguration=Nrse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName="Cap(11)", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai11, TerminalConfiguration=Nrse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName="Tone(12)", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai12, TerminalConfiguration=Nrse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName="Servo(13)", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai13, TerminalConfiguration=Nrse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName="StrainG(6)", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai6, TerminalConfiguration=Nrse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName="StrainG(7)", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai7, TerminalConfiguration=Nrse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName="WheelEncoder(14)", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai14, TerminalConfiguration=Nrse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName="VideoFrames(15)", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai15, TerminalConfiguration=Nrse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName="VisualStim (5)", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai5, TerminalConfiguration=Nrse, VoltageUnits=Volts)
    -> BehaviorSubject Daqdata => #2
    ExternalizedMapping(Path) => #3
    #2, #3 -> Bonsai.Dsp.MatrixWriter(Path=D:\Data\daq, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    -> WorkflowOutput

Bonsai.IO.Ports.CreateSerialPort
  Name=Nano
  PortName=COM6
  BaudRate=9600
  NewLine=\r\n
  Parity=None
  ParityReplace=63
  DataBits=8
  StopBits=One
  Handshake=None
  DiscardNull=false
  DtrEnable=false
  RtsEnable=false
  ReadBufferSize=4096
  WriteBufferSize=2048
  ReceivedBytesThreshold=1

Disable IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #7
Bonsai.Shaders.RenderFrame => #8
#7, #8 -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
-> PublishSubject Draw

Disable Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  VSync=On
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false

GroupWorkflow "Initialize Subjects"
    IntProperty(Value=0) => #0
    -> BehaviorSubject TaskOut
    StringProperty(Value=G) => #2
    #0, #2 -> CombineLatest
    -> BehaviorSubject ToTask
    #2 -> BehaviorSubject Trialtype

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    Int64Property(Value=0)
    -> BehaviorSubject TrialNum

    Int64Property(Value=0)
    -> BehaviorSubject StimNum

    Int64Property(Value=0)
    -> BehaviorSubject WriteStimNum

    Annotation "First Trial Correct"(Text="Initialize trial randomization to 1, so correct sequence runs")
    -> Int64Property(Value=0) => #15
    Annotation "Set the trial type and amount of incorr stimuli (check in sequence)" => #16
      Text="set the position (0, 1 or 2 for example) of where the incorrect stimuli appears in the sequence. This will only occur when trial randomization = 0"
    #15, #16 -> BehaviorSubject TrialRandomization

    Annotation "Set the position of the incorrect stimuli"
      Text="set the position (0, 1 or 2 for example) of where the incorrect stimuli appears in the sequence. This will only occur when trial randomization = 0"
    -> Int64Property(Value=2)
    -> BehaviorSubject SetAnIncorrectPosition

    Bonsai.Numerics.CreateRandom(Seed=nil) => #21
    Annotation "amount of elements in sequence" => #22
      Text: here you can set min and max stim ID, which set the randomization to start somehwere in the 4 element sequence (SetGrateParams), as well as control the logic of looping through the sequence (0-1-2-3-0, for example. This sets it for this for the first trial, and will stay like this unless randomized somewhere later.
    -> ExternalizedMapping(Value(DisplayName=StimIDMinFirstTrial))
    -> Int64Property(Value=0) => #24
    #22 -> ExternalizedMapping(Value(DisplayName=StimIDMaxFirstTrial))
    -> Int64Property(Value=3) => #26
    #24, #26 -> Zip
    -> PropertyMapping(Lower(Selector=Item1), Upper(Selector=Item2)) => #28
    #21, #28 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=3) => #29
    Source2=#29 -> Bonsai.Numerics.Distributions.Sample => #30
    -> BehaviorSubject StartStim
    #30 -> BehaviorSubject StimID
    #26 -> BehaviorSubject MaxStimID
    #24 -> BehaviorSubject MinStimID

    Annotation "Amount of Elements in Trial"(Text="Here initialize how many elements should be in each trial")
    -> ExternalizedMapping(Value(DisplayName=StimNuminSequence))
    -> Int64Property(Value=3)
    -> Subtract(Operand=WorkflowProperty<System.Int64>(Value=1))
    -> BehaviorSubject StimNumInTrial

    BooleanProperty(Value=false)
    -> BehaviorSubject TaskState

    BooleanProperty(Value=false)
    -> BehaviorSubject Ready

GroupWorkflow Update
    SubscribeSubject TrialNum => #0
    -> Condition => #1
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    Annotation "Probability Trial Type"
      Text: Set the boundaries for randomizing between trial type. for now is 1 and 0. Will have to adjust for 10-20% trials, for 0-9, double check the greater than/less than instead of equal to for all trial randomization logic
    -> ExternalizedMapping(TrialRandomizationMin, TrialRandomizationMax) => #3
    #1, #3 -> SelectMany RandomizeTrialTypeExceptFirst
        WorkflowInput Source1 => #0
        Annotation "Wait this many trials" => #1
          Text:
            set here how many trials should be correct before randomization of trial type (correct or incorrect) starts
            0 = 1 trial
        #0, #1 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.Ticks)
        -> PropertyMapping(Seed)
        -> Bonsai.Numerics.CreateRandom(Seed=2084725504) => #5
        ExternalizedMapping(Lower(DisplayName=TrialRandomizationMin), Upper(DisplayName=TrialRandomizationMax)) => #6
        #5, #6 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=6)
        -> Bonsai.Numerics.Distributions.Sample => #8
        Annotation "makes less repetitive? "(Text="need to check how to stop repetitions over 2/3?") => #9
        #8, #9 -> Bonsai.Numerics.Permutation
        -> WorkflowOutput
    -> MulticastSubject TrialRandomization
    -> Disable ElementIndex => #6
    Annotation "add counting repetitive values"(Text="need to check how to stop repetitions over 2/3?") => #7
    #6, #7 -> Disable MemberSelector(Selector=Value)
    #0 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=WorkflowProperty<System.Int64>(Value=0))
        -> WorkflowOutput
    -> MulticastSubject TrialRandomization

    SubscribeSubject Trialtype

    SubscribeSubject TrialRandomization => #12
    Annotation "this needs to be reset every trial for Random Stim ID"(Text="") => #13
    #12, #13 -> FloatProperty(Value=0)
    -> MulticastSubject MinStimID
    #12, #13 -> FloatProperty(Value=3)
    -> MulticastSubject MaxStimID
    Annotation "put the cutoff for incorrect trial types here"(Text="the value of the trial randomization numbers which lead to incorrect trial types")
    -> ExternalizedMapping(Value(DisplayName="Greater than this Trial Randomization = Incorrect")) => #19
    #12, #19 -> GreaterThan(Operand=WorkflowProperty<System.Int64>(Value=4))
    -> PropertyMapping(Value) => #21
    #12, #21 -> Condition => #22
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=false)
        -> WorkflowOutput
    Annotation "Fixed position from initialize"(Text="")
    -> SubscribeSubject SetAnIncorrectPosition
    -> PropertyMapping(Value) => #25
    Annotation "can make random later"(Text="need to adjust this to incorporate a randomization of which position the incorrect stim shows up in") => #26
    #22, #25, #26 -> FloatProperty(Value=2)
    -> BehaviorSubject PositionIncorrectStim
    #12 -> FloatProperty(Value=0)
    -> MulticastSubject StimNum
    #12 -> Disable Condition
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> Disable FloatProperty(Value=2)
    -> Disable BehaviorSubject HowManyIncorrectStimuli
    ExternalizedMapping(Value(DisplayName="G trial max+1")) => #34
    #12, #34 -> LessThan(Operand=WorkflowProperty<System.Int64>(Value=5))
    -> PropertyMapping(Value) => #36
    #12, #36 -> Condition
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> StringProperty(Value=G)
    -> MulticastSubject Trialtype
    ExternalizedMapping(Value(DisplayName="N trial min")) => #40
    #12, #40 -> GreaterThan(Operand=WorkflowProperty<System.Int64>(Value=4))
    -> PropertyMapping(Value) => #42
    #12, #42 -> Condition
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=false)
        -> WorkflowOutput
    -> StringProperty(Value=N)
    -> MulticastSubject Trialtype

    SubscribeSubject MinStimID => #46
    SubscribeSubject MaxStimID => #47
    #46, #47 -> Zip => #48
    -> PropertyMapping(Lower(Selector=Item1), Upper(Selector=Item2)) => #49
    Annotation "don't touch this"(Text="needs to be triggered from zip... tried everything else didn't work") => #50
    #49, #48, #50 -> SelectMany RandomStimID => #51
        WorkflowInput Source1
        -> Bonsai.Numerics.CreateRandom(Seed=nil) => #1
        ExternalizedMapping(Lower, Upper) => #2
        #1, #2 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=3) => #3
        Source2=#3 -> Bonsai.Numerics.Distributions.Sample
        -> WorkflowOutput
    -> MulticastSubject StartStim
    Annotation "Don't need this anymore"(Text="Now I add only StimNum (0,1,2 for 3 element sequence) to the StartStim, so I shouldn't have to reset the StimID at end of trial ") => #53
    #51, #53 -> MulticastSubject StimID

    SubscribeSubject StimID => #55
    -> SelectMany SetGrateParams
        WorkflowInput Source1 => #0
        -> Condition => #1
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> FloatProperty(Value=45) => #2
        #0 -> Condition => #3
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> FloatProperty(Value=105) => #4
        #0 -> Condition => #5
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> FloatProperty(Value=15) => #6
        #0 -> Condition => #7
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> FloatProperty(Value=75) => #8
        #2, #4, #6, #8 -> Merge
        -> Bonsai.Numerics.DegreeToRadian => #10
        #1 -> FloatProperty(Value=1) => #11
        #3 -> FloatProperty(Value=2) => #12
        #5 -> FloatProperty(Value=3) => #13
        #7 -> FloatProperty(Value=4) => #14
        #11, #12, #13, #14 -> Merge => #15
        #10, #15 -> Zip
        -> WorkflowOutput
    -> BehaviorSubject CorrectGrate
    #55 -> SelectMany SetIncorrectGrateParams
        WorkflowInput Source1 => #0
        -> Condition => #1
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=20))
            -> WorkflowOutput
        -> FloatProperty(Value=90) => #2
        #0 -> Condition => #3
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=21))
            -> WorkflowOutput
        -> FloatProperty(Value=180) => #4
        #0 -> Condition => #5
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=22))
            -> WorkflowOutput
        -> FloatProperty(Value=90) => #6
        #0 -> Condition => #7
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=23))
            -> WorkflowOutput
        -> FloatProperty(Value=180) => #8
        #2, #4, #6, #8 -> Merge
        -> Bonsai.Numerics.DegreeToRadian => #10
        #1 -> FloatProperty(Value=5) => #11
        #3 -> FloatProperty(Value=5) => #12
        #5 -> FloatProperty(Value=5) => #13
        #7 -> FloatProperty(Value=5) => #14
        #11, #12, #13, #14 -> Merge => #15
        #10, #15 -> Zip
        -> WorkflowOutput
    -> MulticastSubject CorrectGrate

    GroupWorkflow Sequence
        SubscribeSubject StimNum => #0
        Annotation "stops StimID update after last element presentation"(Text="this prevents the stimcounter from running the StimID to update after the last element in the sequence is presented.")
        -> SubscribeSubject StimNumInTrial
        -> PropertyMapping(Value) => #3
        #0, #3 -> LessThanOrEqual(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> PropertyMapping(Value) => #5
        #5, #0 -> Condition => #6
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject StartStim
        -> PropertyMapping(Value) => #8
        Annotation "add stim num"(Text="adds the stim num (0,1,2,3) to the start stim, to create a stim ID for each presented stimulus") => #9
        #6, #8, #9 -> Add(Operand=IntProperty(Value=1)) => #10
        Annotation "loops through sequence" => #11
          Text:
            whatever the min and max stim ID are, these make sure the sequence is updated to the following element in the sequence, and loops back after it is over.
            for now 0-1-2-3-0

            for blue circle code also stim sequence 5-6-7-8-5 was used, with min and max stim ID set based on trial randomization.

            if you integrate another min max id, leave 1 number gap in between, otherwise logic gets complex with overlapping number
        -> SubscribeSubject MaxStimID => #12
        -> PropertyMapping(Value) => #13
        #10, #13 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> GreaterThan(Operand=WorkflowProperty<System.Int64>(Value=3))
            -> WorkflowOutput
        -> Subtract(Operand=IntProperty(Value=4)) => #15
        #11 -> SubscribeSubject MinStimID
        -> PropertyMapping(Value) => #17
        #10, #17 -> Condition => #18
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=WorkflowProperty<System.Int64>(Value=0))
            -> WorkflowOutput
        #12 -> PropertyMapping(Value) => #19
        #18, #19 -> Condition => #20
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> LessThanOrEqual(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        #15, #20 -> Merge => #21
        SubscribeSubject TrialRandomization => #22
        Annotation "correct trials"(Text="") => #23
        ExternalizedMapping(Value(DisplayName="0 until this value are correct")) => #24
        #22, #23, #24 -> LessThan(Operand=WorkflowProperty<System.Int64>(Value=5))
        -> PropertyMapping(Value) => #26
        #21, #26 -> Condition => #27
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        Annotation "1 stim inc"(Text="") => #28
        ExternalizedMapping(Value(DisplayName="trial rand value for 1 stim inc")) => #29
        #22, #28, #29 -> Equal(Operand=WorkflowProperty<System.Int64>(Value=8))
        -> PropertyMapping(Value) => #31
        #31, #21 -> Condition => #32
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> WorkflowOutput
        SubscribeSubject PositionIncorrectStim => #33
        -> PropertyMapping(Value) => #34
        Annotation "where stimID is not equal to incorrect position" => #35
          Text: here we say when the Stim ID is not equal to the position of incorrect stim, just pass the StimID (after filtering for the trial randomization value representing 1 incorrect trial per sequence)
        #6, #34, #35 -> NotEqual(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> PropertyMapping(Value) => #37
        #32, #37 -> Condition => #38
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        #33 -> PropertyMapping(Value) => #39
        Annotation "where stimID is equal to incorrect position" => #40
          Text: here we say when the Stim ID is not equal to the position of incorrect stim, just add 20 to the StimID (after filtering for the trial randomization value representing 1 incorrect trial per sequence)
        #6, #39, #40 -> Equal(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> PropertyMapping(Value) => #42
        #32, #42 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> WorkflowOutput
        -> Add(Operand=IntProperty(Value=20)) => #44
        Annotation "2 stim Incorr"(Text="for trial randomization =  this, all 3 stim are incorrect") => #45
        ExternalizedMapping(Value(DisplayName="trial rand value for 2 stim inc")) => #46
        #22, #45, #46 -> GreaterThanOrEqual(Operand=WorkflowProperty<System.Int64>(Value=5))
        -> PropertyMapping(Value) => #48
        #48, #21 -> Condition => #49
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> WorkflowOutput
        #33 -> PropertyMapping(Value) => #50
        #50, #6 -> Equal(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> PropertyMapping(Value) => #52
        #49, #52 -> Condition => #53
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> WorkflowOutput
        #33 -> PropertyMapping(Value) => #54
        Annotation "for stim ID 1 and 3" => #55
          Text: after filtering for trial randomization = set 2 incorrect stimuli in trial, then when position is not equal to 2, add 20 to stim ID (to set incorr stim)
        #54, #6, #55 -> NotEqual(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> PropertyMapping(Value) => #57
        #49, #57 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> Add(Operand=IntProperty(Value=20)) => #59
        ExternalizedMapping(Value(DisplayName="trial rand value for 3 stim inc")) => #60
        Annotation "All 3 stim Incorr"(Text="for trial randomization =  this, all 3 stim are incorrect") => #61
        Annotation(Text="if changing amount of stim might need to swap for equal to, or several equal tos") => #62
        #22, #60, #61, #62 -> GreaterThanOrEqual(Operand=WorkflowProperty<System.Int64>(Value=8))
        -> PropertyMapping(Value) => #64
        #21, #64 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> WorkflowOutput
        -> Add(Operand=IntProperty(Value=20)) => #66
        #27, #38, #44, #53, #59, #66 -> Merge
        -> MulticastSubject StimID
        -> WorkflowOutput

GroupWorkflow CheckSerial(Description="Sends timed output to arduino to receive signal back when ready. Can be used to turmn off reading wheel etc")
    Timer(DueTime=PT0S, Period=PT10S)
    -> StringProperty(Value=Test)
    -> Disable Bonsai.IO.SerialStringWrite(PortName=Task, NewLine=\r\n)
    -> Bonsai.IO.Ports.SerialWriteLine(PortName=Task, NewLine=\r\n)
    -> Disable Bonsai.IO.SerialStringWrite(PortName=Task, NewLine=\r\n) => #4
    SubscribeSubject FromTask => #5
    #4, #5 -> TakeUntil
    -> WorkflowOutput
-> Last
-> BooleanProperty(Value=true)
-> MulticastSubject Ready
-> SelectMany TrialLogic
    SubscribeSubject StimNum => #0
    SubscribeSubject StimNumInTrial => #1
    -> PropertyMapping(Value) => #2
    #0, #2 -> LessThanOrEqual(Operand=WorkflowProperty<System.Int64>(Value=2))
    -> PropertyMapping(Value) => #4
    #4, #0 -> Condition => #5
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    Annotation "Actual Stim Num" => #6
      Text: This adjusts so that the counter that presents elements (which counts one more than the elements presented) only gives the stim num per element, excluding the last stim counter at end of sequence.
    #5, #6 -> BehaviorSubject WriteStimNum
    SubscribeSubject Draw => #8
    SubscribeSubject CorrectGrate
    -> PropertyMapping(Angle(Selector=Item1), SpatialFrequency(Selector=Item2)) => #10
    #8, #10 -> IncludeWorkflow => #11
      Path=BonVision:Primitives.DrawGratings.bonsai
      LocationX=0
      LocationY=0.3
      Layer=0
      ExtentX=1
      ExtentY=1
      SpatialFrequency=3
      TemporalFrequency=1
      Phase=0
      Angle=15
      SquareWave=false
      Contrast=1
      DutyCycle=nil
      Radius=1
      Aperture=0
      Opacity=1
    #8, #10 -> IncludeWorkflow => #12
      Path=BonVision:Primitives.DrawGratings.bonsai
      LocationX=-1.1
      LocationY=0.3
      Layer=0
      ExtentX=1
      ExtentY=1
      SpatialFrequency=3
      TemporalFrequency=1
      Phase=0
      Angle=15
      SquareWave=false
      Contrast=1
      DutyCycle=nil
      Radius=1
      Aperture=0
      Opacity=1
    #8, #10 -> IncludeWorkflow => #13
      Path=BonVision:Primitives.DrawGratings.bonsai
      LocationX=1.1
      LocationY=0.3
      Layer=0
      ExtentX=1
      ExtentY=1
      SpatialFrequency=3
      TemporalFrequency=1
      Phase=0
      Angle=15
      SquareWave=false
      Contrast=1
      DutyCycle=nil
      Radius=1
      Aperture=0
      Opacity=1
    #11, #12, #13 -> Merge
    -> Sink UpdatePD => #15
        WorkflowInput Source1
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=PDState))
        -> FloatProperty(Value=1)
        -> MulticastSubject QuadState
    Bonsai.Shaders.Timer(DueTime=PT1.2S) => #16
    #15, #16 -> SubscribeWhen => #17
    Bonsai.Shaders.Timer(DueTime=PT2.4S) => #18
    #17, #18 -> TakeUntil
    -> Last
    -> Sink UpdatePD
        WorkflowInput Source1
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=PDState))
        -> FloatProperty(Value=0)
        -> MulticastSubject QuadState
    -> Repeat
    -> ElementIndex
    -> SelectMany UpdateStimNum => #24
        WorkflowInput Source1
        -> MemberSelector(Selector=Index)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject StimNum
        -> WorkflowOutput
    #1 -> PropertyMapping(Value) => #25
    #24, #25 -> TakeWhile
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> LessThanOrEqual(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> Last
    -> BooleanProperty(Value=true)
    -> MulticastSubject TaskState
    -> SelectMany
        WorkflowInput Source1
        -> Sink UpdatePD => #1
            WorkflowInput Source1
            -> WorkflowOutput

            ExternalizedMapping(Value(DisplayName=PDState))
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
        SubscribeSubject ToTask => #2
        #1, #2 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> Bonsai.IO.Ports.SerialWriteLine(PortName=Task, NewLine=\n\r)
        -> WorkflowOutput
    -> Delay(DueTime=PT1S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject TaskState => #33
    SubscribeSubject FromTask
    -> BooleanProperty(Value=true) => #35
    Disable Timer(DueTime=PT6S, Period=PT0S) => #36
    #33, #35, #36 -> Zip
    -> Repeat
    -> ElementIndex
    -> SelectMany UpdateTrialNum
        WorkflowInput Source1
        -> MemberSelector(Selector=Index)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TrialNum
        -> WorkflowOutput

    SubscribeSubject WriteStimNum => #41
    SubscribeSubject StimID => #42
    #41, #42 -> WithLatestFrom => #43
    SubscribeSubject TrialNum
    -> Timestamp => #45
    SubscribeSubject TrialRandomization => #46
    SubscribeSubject TaskFeedback => #47
    #45, #46, #47 -> Zip
    -> Disable Skip(Count=1) => #49
    #43, #49 -> CombineLatest
    -> MemberSelector(Selector="Item1,Item2")
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #52
      Expression:
        new(
        it.Item1.Item1 as StimulusNumber,
        it.Item1.Item2 as StimulusElement,
        it.Item2.Item1 as TrialNum,
        it.Item2.Item2 as TrialType,
        it.Item2.Item3 as TaskFeedback)
    Annotation "check alignment stim Num and stim element"(Text="") => #53
    #52, #53 -> Bonsai.IO.CsvWriter(FileName=D:\Data\metaData.csv, Delimiter=;, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject Draw => #55
    SubscribeSubject QuadState
    -> PropertyMapping(ColorR, ColorG, ColorB) => #57
    #55, #57 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=0.2
      ExtentY=0.2
      LocationX=-0.651162744
      LocationY=-0.93
      Layer=0
      Angle=0
      ColorR=0
      ColorG=0
      ColorB=0
      ColorA=1

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

Disable GroupWorkflow "Log Data"
    Disable SubscribeSubject WriteStimNum => #0
    Disable SubscribeSubject StimID => #1
    #0, #1 -> Disable Zip => #2
    Disable SubscribeSubject TrialNum
    -> Disable Timestamp => #4
    Disable SubscribeSubject TrialRandomization => #5
    #4, #5 -> Disable Zip => #6
    #2, #6 -> Disable WithLatestFrom
    -> Disable Skip(Count=1)
    -> Disable MemberSelector(Selector="Item1,Item2")
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #10
      Expression:
        new(
        it.Item1.Item1 as StimulusNumber,
        it.Item1.Item2 as StimulusElement,
        it.Item2.Item1 as TrialNum,
        it.Item2.Item2 as TrialType)
    Disable Annotation "check alignment stim Num and stim element"(Text="") => #11
    #10, #11 -> Disable Bonsai.IO.CsvWriter(FileName=metaData.csv, Delimiter=;, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)

GroupWorkflow SendTask(Description="Send signal to arduino to start Task and indicate rewarded direction")
    SubscribeSubject TaskState => #0
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> MulticastSubject TaskOut
    #0 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> MulticastSubject TaskOut

    SubscribeSubject TaskOut => #7
    SubscribeSubject Trialtype => #8
    #7, #8 -> CombineLatest
    -> DistinctUntilChanged => #10
    SubscribeSubject Ready
    -> PropertyMapping(Value) => #12
    #10, #12 -> Condition
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> MulticastSubject ToTask
    -> WorkflowOutput

GroupWorkflow PylonCamera
    SubscribeSubject Ready
    -> Condition => #1
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    Source2=#1 -> IntProperty(Value=1)
    -> Bonsai.IO.Ports.SerialWriteLine(PortName=Nano)

    SubscribeSubject StopCamTrigger => #4
    Source2=#4 -> IntProperty(Value=1)
    -> Bonsai.IO.Ports.SerialWriteLine(PortName=Nano)

    ExternalizedMapping(Value(DisplayName=FrameRate))
    -> IntProperty(Value=30)
    -> BehaviorSubject Framerate => #9
    -> PropertyMapping(Value) => #10
    SubscribeSubject Ready
    -> Condition => #12
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    #10, #12 -> IntProperty(Value=30)
    -> Take(Count=1)
    -> Bonsai.IO.Ports.SerialWriteLine(PortName=Nano)
    #9 -> PropertyMapping(FrameRate) => #16
    ExternalizedMapping(ParameterFile, SerialNumber)
    -> Bonsai.Pylon.PylonCapture(SerialNumber=40238998, ParameterFile="pylon settings\a2A1920-160umBAS_40238985_trigger_highgain.pfs", GrabStrategy=OneByOne) => #18
    -> MemberSelector(Selector=Image)
    -> Disable Bonsai.Vision.Crop(RegionOfInterest(X=756, Y=480, Width=1164, Height=715)) => #20
    ExternalizedMapping(Value(DisplayName=RecordVideo)) => #21
    #20, #21 -> Condition => #22
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    #16, #22 -> Disable Bonsai.Vision.VideoWriter => #23
      FileName=D:\Data\vid1_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=1920, Height=1200)
      ResizeInterpolation=NearestNeighbor
    SubscribeSubject StopRecording => #24
    #23, #24 -> TakeUntil => #25
    #9 -> PropertyMapping(FrameRate) => #26
    ExternalizedMapping(OutputArguments(DisplayName=Output1)) => #27
    #25, #26, #27 -> Bonsai.FFmpeg.VideoWriter
      FileName=D:\Data\vid1_.mp4
      Suffix=Timestamp
      Overwrite=false
      FrameRate=30
      OutputArguments="-c:v h264_nvenc -preset:v p7 -tune:v hq -rc:v vbr -cq:v 40 -b:v 0 -profile:v high"
    #9 -> PropertyMapping(FrameRate) => #29
    ExternalizedMapping(ParameterFile(DisplayName=Parameterfile2), SerialNumber(DisplayName=SerialNumber2))
    -> Bonsai.Pylon.PylonCapture(SerialNumber=40238985, ParameterFile="pylon settings\a2A1920-160umBAS_40238985_trigger_mediumgain.pfs", GrabStrategy=OneByOne) => #31
    -> MemberSelector(Selector=Image)
    -> Disable Bonsai.Vision.Crop(RegionOfInterest(X=894, Y=490, Width=1026, Height=710)) => #33
    #33, #21 -> Condition => #34
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    #29, #34 -> Disable Bonsai.Vision.VideoWriter => #35
      FileName=D:\Data\vid2_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=1920, Height=1200)
      ResizeInterpolation=NearestNeighbor
    #35, #24 -> TakeUntil => #36
    #9 -> PropertyMapping(FrameRate) => #37
    ExternalizedMapping(OutputArguments(DisplayName=Output2)) => #38
    #36, #37, #38 -> Bonsai.FFmpeg.VideoWriter
      FileName=D:\Data\vid2_.mp4
      Suffix=Timestamp
      Overwrite=false
      FrameRate=30
      OutputArguments="-c:v h264_nvenc -preset:v p7 -tune:v hq -rc:v vbr -cq:v 40 -b:v 0 -profile:v high"
    #31 -> MemberSelector(Selector=GrabResult)
    -> MemberSelector(Selector="SkippedImageCount,ImageNumber,ID,Timestamp,ErrorCode,GrabSucceeded") => #41
    #41, #21 -> Condition
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #43
      Expression:
        new(
        it.Item1 as SkippedImageCount,
        it.Item2 as ImageNumber,
        it.Item3 as ID,
        it.Item4 as Timestamp,
        it.Item5 as ErrorCode,
        it.Item6 as GrabSucceeded
        )
    #43, #24 -> TakeUntil
    -> Bonsai.IO.CsvWriter(FileName=D:\Data\grab2.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #18 -> MemberSelector(Selector=GrabResult)
    -> MemberSelector(Selector="SkippedImageCount,ImageNumber,ID,Timestamp,ErrorCode,GrabSucceeded") => #47
    #47, #21 -> Condition
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #49
      Expression:
        new(
        it.Item1 as SkippedImageCount,
        it.Item2 as ImageNumber,
        it.Item3 as ID,
        it.Item4 as Timestamp,
        it.Item5 as ErrorCode,
        it.Item6 as GrabSucceeded
        )
    #49, #24 -> TakeUntil
    -> Bonsai.IO.CsvWriter(FileName=D:\Data\grab1.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    ExternalizedMapping(SerialNumber(DisplayName=SerialNumber3), ParameterFile(DisplayName=ParameterFile3))
    -> Bonsai.Pylon.PylonCapture(SerialNumber=40627028, ParameterFile="pylon settings\a2A1920-160umBAS_pupilTest -Updated_trigger.pfs", GrabStrategy=OneByOne) => #53
    -> MemberSelector(Selector=Image)
    -> Disable Bonsai.Vision.Crop(RegionOfInterest(X=894, Y=490, Width=1026, Height=710))
    -> Condition
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> Disable Bonsai.Vision.VideoWriter => #57
      FileName=D:\Data\vid2_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=100
      FrameSize(Width=1920, Height=1200)
      ResizeInterpolation=NearestNeighbor
    #57, #24 -> TakeUntil => #58
    ExternalizedMapping(OutputArguments(DisplayName=Output3), FrameRate(DisplayName="Frame Rate for Pupils")) => #59
    #58, #59 -> Bonsai.FFmpeg.VideoWriter(FileName=D:\Data\vid3_.mp4, Suffix=Timestamp, Overwrite=false, FrameRate=30, OutputArguments="-c:v h264_nvenc")
    #53 -> MemberSelector(Selector=GrabResult)
    -> MemberSelector(Selector="SkippedImageCount,ImageNumber,ID,Timestamp,ErrorCode,GrabSucceeded") => #62
    #62, #21 -> Condition
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #64
      Expression:
        new(
        it.Item1 as SkippedImageCount,
        it.Item2 as ImageNumber,
        it.Item3 as ID,
        it.Item4 as Timestamp,
        it.Item5 as ErrorCode,
        it.Item6 as GrabSucceeded
        )
    #64, #24 -> TakeUntil
    -> Bonsai.IO.CsvWriter(FileName=D:\Data\grab3.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")

Bonsai.Windows.Input.KeyDown(Filter=End, SuppressRepetitions=false)
-> BooleanProperty(Value=true)
-> BehaviorSubject StopCamTrigger
-> Delay(DueTime=PT10S)
-> BehaviorSubject StopRecording

GroupWorkflow ReceiveTask(Description="Read serial input from arduino toreset task State and log trial outcome")
    Bonsai.IO.Ports.SerialReadLine(PortName=Task, NewLine=\r\n)
    -> BehaviorSubject FromTask
    -> BooleanProperty(Value=false)

    SubscribeSubject FromTask
    -> MemberSelector(Selector="Length,it")
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2)
    -> BehaviorSubject TaskFeedback
    -> Disable BooleanProperty(Value=false)
    -> Disable MulticastSubject TaskState
