<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateDiscreteUniform">
          <p1:Lower>0</p1:Lower>
          <p1:Upper>5</p1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Sample" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RandomTrial</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RandomTrial</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>0.9</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>1</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>0.8</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>circleParams</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RandomTrial</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>90</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>2</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>grateParams</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>circleParams</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorA" Selector="Item1" />
          <Property Name="ColorB" Selector="Item2" />
          <Property Name="ColorG" Selector="Item3" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
        <Diameter>1</Diameter>
        <LocationX>1</LocationX>
        <LocationY>1</LocationY>
        <Layer>0</Layer>
        <ColorR>0</ColorR>
        <ColorG>0.8</ColorG>
        <ColorB>1</ColorB>
        <ColorA>0.9</ColorA>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:Timer">
            <gl:DueTime>PT1S</gl:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:Timer">
            <gl:DueTime>PT2S</gl:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:TakeUntil" />
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>grateParams</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Angle" Selector="Item1" />
          <Property Name="TemporalFrequency" Selector="Item2" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
        <SpatialFrequency>10</SpatialFrequency>
        <TemporalFrequency>2</TemporalFrequency>
        <Phase>0</Phase>
        <Angle>5156.62</Angle>
        <SquareWave>false</SquareWave>
        <Contrast>1</Contrast>
        <DutyCycle xsi:nil="true" />
        <Radius>1</Radius>
        <Aperture>0</Aperture>
        <Opacity>1</Opacity>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="17" Label="Source1" />
      <Edge From="15" To="17" Label="Source2" />
      <Edge From="16" To="17" Label="Source3" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="23" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="28" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="26" To="30" Label="Source3" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="30" To="32" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="33" To="36" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="34" To="37" Label="Source2" />
      <Edge From="35" To="36" Label="Source2" />
      <Edge From="36" To="37" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>