<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>900</gl:Width>
          <gl:Height>600</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
          <Left>-180</Left>
          <Right>180</Right>
          <Bottom>-90</Bottom>
          <Top>90</Top>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Draw</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>QuadState</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="ColorR" />
            <Property Name="ColorG" />
            <Property Name="ColorB" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
          <ExtentX>1</ExtentX>
          <ExtentY>1</ExtentY>
          <LocationX>1.3</LocationX>
          <LocationY>-0.8</LocationY>
          <Layer>0</Layer>
          <Angle>0</Angle>
          <ColorR>0</ColorR>
          <ColorG>0</ColorG>
          <ColorB>0</ColorB>
          <ColorA>1</ColorA>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="FloatProperty">
            <Value>0</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>QuadState</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>-1</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <ExtentX>0.5</ExtentX>
        <ExtentY>0.5</ExtentY>
        <SpatialFrequency>2</SpatialFrequency>
        <TemporalFrequency>1</TemporalFrequency>
        <Phase>0</Phase>
        <Angle>45</Angle>
        <SquareWave>false</SquareWave>
        <Contrast>1</Contrast>
        <DutyCycle xsi:nil="true" />
        <Radius>1</Radius>
        <Aperture>0</Aperture>
        <Opacity>1</Opacity>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>-0.4</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <ExtentX>0.5</ExtentX>
        <ExtentY>0.5</ExtentY>
        <SpatialFrequency>3</SpatialFrequency>
        <TemporalFrequency>1</TemporalFrequency>
        <Phase>0</Phase>
        <Angle>105</Angle>
        <SquareWave>false</SquareWave>
        <Contrast>1</Contrast>
        <DutyCycle xsi:nil="true" />
        <Radius>1</Radius>
        <Aperture>0</Aperture>
        <Opacity>1</Opacity>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>0.2</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <ExtentX>0.5</ExtentX>
        <ExtentY>0.5</ExtentY>
        <SpatialFrequency>4</SpatialFrequency>
        <TemporalFrequency>1</TemporalFrequency>
        <Phase>0</Phase>
        <Angle>15</Angle>
        <SquareWave>false</SquareWave>
        <Contrast>1</Contrast>
        <DutyCycle xsi:nil="true" />
        <Radius>1</Radius>
        <Aperture>0</Aperture>
        <Opacity>1</Opacity>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>0.8</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <ExtentX>0.5</ExtentX>
        <ExtentY>0.5</ExtentY>
        <SpatialFrequency>5</SpatialFrequency>
        <TemporalFrequency>1</TemporalFrequency>
        <Phase>0</Phase>
        <Angle>75</Angle>
        <SquareWave>false</SquareWave>
        <Contrast>1</Contrast>
        <DutyCycle xsi:nil="true" />
        <Radius>1</Radius>
        <Aperture>0</Aperture>
        <Opacity>1</Opacity>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>